<CompuCell3D Revision="20200518" Version="4.2.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="2"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="Uninfected"/>
      <CellType Freeze="" TypeId="2" TypeName="Infected"/>
      <CellType Freeze="" TypeId="3" TypeName="VirusReleasing"/>
      <CellType Freeze="" TypeId="4" TypeName="Dead"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Virus">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Uninfected">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Infected">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="VirusReleasing">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="Uninfected">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="Infected">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="VirusReleasing">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="Uninfected">0.1</Secretion>
            <Secretion Type="Infected">0.1</Secretion>
            <Secretion Type="VirusReleasing">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="Uninfected,Infected,VirusReleasing" Type="VirusReleasing">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="VirusReleasing">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="Cytokine">
         <DiffusionData>
            <FieldName>Cytokine</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Uninfected">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Infected">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="VirusReleasing">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="Uninfected">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="Infected">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="VirusReleasing">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="Uninfected">0.1</Secretion>
            <Secretion Type="Infected">0.1</Secretion>
            <Secretion Type="VirusReleasing">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="Uninfected,Infected,VirusReleasing" Type="VirusReleasing">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="VirusReleasing">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
</CompuCell3D>
