<CompuCell3D Revision="20200118" Version="4.1.1">

    <Metadata>
        <!-- Basic properties simulation -->
        <NumberOfProcessors>1</NumberOfProcessors>
        <DebugOutputFrequency>100</DebugOutputFrequency>
    </Metadata>

    <Potts>
        <!-- Basic properties of CPM (GGH) algorithm -->
        <Dimensions x="200" y="200" z="2"/>
        <Steps>4001</Steps>
        <Temperature>10.0</Temperature>
        <NeighborOrder>3</NeighborOrder>
        <Boundary_x>Periodic</Boundary_x>
        <Boundary_y>Periodic</Boundary_y>
    </Potts>

    <Plugin Name="CellType">
    <!-- Listing all cell types in the simulation -->
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType Freeze="" TypeId="1" TypeName="Uninfected"/>
        <CellType Freeze="" TypeId="2" TypeName="Infected"/>
        <CellType Freeze="" TypeId="3" TypeName="VirusReleasing"/>
        <CellType Freeze="" TypeId="4" TypeName="Dead"/>
        <CellType TypeId="5" TypeName="CD8Local"/>
    </Plugin>

    <Plugin Name="Volume"/>

    <Plugin Name="CenterOfMass"/>

    <Plugin Name="NeighborTracker"/>

   <Plugin Name="Secretion"/>

   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="Virus">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant id = "virus_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "virus_decay">0</GlobalDecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="cytokine">
         <DiffusionData>
            <FieldName>cytokine</FieldName>
            <GlobalDiffusionConstant id = "cytokine_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "cytokine_decay">0</GlobalDecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
</CompuCell3D>
