<CompuCell3D Revision="20190906" Version="4.1.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="300" z="1"/>
      <Steps id="simulation_steps">100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="U"/>
      <CellType Freeze="" TypeId="2" TypeName="I1"/>
      <CellType Freeze="" TypeId="3" TypeName="I2"/>
      <CellType Freeze="" TypeId="4" TypeName="Dead"/>
   </Plugin>

   <Plugin Name="Secretion">
   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="Virus">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant id = "virus_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "virus_decay">0.0</GlobalDecayConstant>
            <InitialConcentrationExpression>75.0/(300*300)</InitialConcentrationExpression>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="IFNe">
         <DiffusionData>
            <FieldName>IFNe</FieldName>
            <GlobalDiffusionConstant id = "IFNe_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "IFNe_decay">0.0</GlobalDecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>

   <Steppable Type="UniformInitializer">
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="300" y="300" z="1"/>
         <Gap>0</Gap>
         <Width>3</Width>
         <Types>U</Types>
      </Region>
   </Steppable>
</CompuCell3D>
