<CompuCell3D Revision="20190906" Version="4.1.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps id="simulation_steps">100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="U"/>
      <CellType Freeze="" TypeId="2" TypeName="I1"/>
      <CellType Freeze="" TypeId="3" TypeName="I2"/>
      <CellType Freeze="" TypeId="4" TypeName="Dead"/>

   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="U" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="I1" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="I2" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="Dead" LambdaVolume="2.0" TargetVolume="50"/>

   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="U">10.0</Energy>
   <Energy Type1="Medium" Type2="I1">10.0</Energy>
   <Energy Type1="Medium" Type2="I2">10.0</Energy>
   <Energy Type1="Medium" Type2="Dead">10.0</Energy>
   <Energy Type1="U" Type2="U">10.0</Energy>
   <Energy Type1="U" Type2="I1">10.0</Energy>
   <Energy Type1="U" Type2="I2">10.0</Energy>
   <Energy Type1="U" Type2="Dead">10.0</Energy>
   <Energy Type1="I1" Type2="I1">10.0</Energy>
   <Energy Type1="I1" Type2="I2">10.0</Energy>
   <Energy Type1="I1" Type2="Dead">10.0</Energy>
   <Energy Type1="I2" Type2="I2">10.0</Energy>
   <Energy Type1="I2" Type2="Dead">10.0</Energy>
   <Energy Type1="Dead" Type2="Dead">10.0</Energy>
   <NeighborOrder>3</NeighborOrder>
</Plugin>

   <Plugin Name="Secretion">
   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="IFNe">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant id = "IFNe_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "IFNe_decay">0.0</GlobalDecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="Virus">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant id = "Virus_dc">1.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id = "Virus_decay">0.0</GlobalDecayConstant>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>

   <Steppable Type="UniformInitializer">
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="256" y="256" z="1"/>
         <Gap>0</Gap>
         <Width>3</Width>
         <Types>I2</Types>
      </Region>
   </Steppable>
</CompuCell3D>
