<CompuCell3D Revision="20200118" Version="4.1.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="300" z="2"/>
      <Steps id="simulation_steps">100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="1" TypeName="E"/>
      <CellType Freeze="" TypeId="2" TypeName="EV"/>
      <CellType Freeze="" TypeId="3" TypeName="D"/>
      <CellType TypeId="4" TypeName="APC"/>
      <CellType TypeId="5" TypeName="Tcell"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="E" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="EV" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="D" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="APC" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="Tcell" LambdaVolume="2.0" TargetVolume="50"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="E" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="EV" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="D" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="APC" LambdaSurface="2.0" TargetSurface="50"/>
      <SurfaceEnergyParameters CellType="Tcell" LambdaSurface="2.0" TargetSurface="50"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
      
      <!-- Module tracking boundary pixels of each cell -->
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="E">10.0</Energy>
      <Energy Type1="Medium" Type2="EV">10.0</Energy>
      <Energy Type1="Medium" Type2="D">10.0</Energy>
      <Energy Type1="Medium" Type2="APC">10.0</Energy>
      <Energy Type1="Medium" Type2="Tcell">10.0</Energy>
      <Energy Type1="E" Type2="E">10.0</Energy>
      <Energy Type1="E" Type2="EV">10.0</Energy>
      <Energy Type1="E" Type2="D">10.0</Energy>
      <Energy Type1="E" Type2="APC">10.0</Energy>
      <Energy Type1="E" Type2="Tcell">10.0</Energy>
      <Energy Type1="EV" Type2="EV">10.0</Energy>
      <Energy Type1="EV" Type2="D">10.0</Energy>
      <Energy Type1="EV" Type2="APC">10.0</Energy>
      <Energy Type1="EV" Type2="Tcell">10.0</Energy>
      <Energy Type1="D" Type2="D">10.0</Energy>
      <Energy Type1="D" Type2="APC">10.0</Energy>
      <Energy Type1="D" Type2="Tcell">10.0</Energy>
      <Energy Type1="APC" Type2="APC">10.0</Energy>
      <Energy Type1="APC" Type2="Tcell">10.0</Energy>
      <Energy Type1="Tcell" Type2="Tcell">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Secretion">
</Plugin>

   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Virus">
         <DiffusionData>
            <FieldName>Virus</FieldName>
            <GlobalDiffusionConstant>10.0</GlobalDiffusionConstant>
            <GlobalDecayConstant id='virus_decay'>0.01</GlobalDecayConstant>
             <InitialConcentrationExpression>10.0/(300*300)</InitialConcentrationExpression>
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="CK0">
         <DiffusionData>
            <FieldName>CK0</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="E">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="EV">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="D">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="APC">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Tcell">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="E">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="EV">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="D">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="APC">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="Tcell">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="E">0.1</Secretion>
            <Secretion Type="EV">0.1</Secretion>
            <Secretion Type="D">0.1</Secretion>
            <Secretion Type="APC">0.1</Secretion>
            <Secretion Type="Tcell">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="E,EV,D,APC,Tcell" Type="Tcell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Tcell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="CK1">
         <DiffusionData>
            <FieldName>CK1</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="E">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="EV">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="D">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="APC">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="Tcell">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="E">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="EV">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="D">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="APC">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="Tcell">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="E">0.1</Secretion>
            <Secretion Type="EV">0.1</Secretion>
            <Secretion Type="D">0.1</Secretion>
            <Secretion Type="APC">0.1</Secretion>
            <Secretion Type="Tcell">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="E,EV,D,APC,Tcell" Type="Tcell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Tcell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
      <DiffusionField Name="CK2">
         <DiffusionData>
            <FieldName>CK2</FieldName>
            <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
            <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <Secretion Type="E">0.1</Secretion>
            <Secretion Type="EV">0.1</Secretion>
            <Secretion Type="D">0.1</Secretion>
            <Secretion Type="APC">0.1</Secretion>
            <Secretion Type="Tcell">0.1</Secretion>
            <!-- <SecretionOnContact SecreteOnContactWith="E,EV,D,APC,Tcell" Type="Tcell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="Tcell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Z">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>

<Steppable Type="UniformInitializer">
   
   <!-- Initial layout of cells in the form of rectangular slab -->
   <Region>
      <BoxMin x="0" y="0" z="1"/>
      <BoxMax x="300" y="300" z="2"/>
      <Gap>0</Gap>
      <Width>3</Width>
      <Types>E</Types>
   </Region>
</Steppable>
</CompuCell3D>
